// Salto
// (c) Charles CH Cohen, 2014-present
// this software is released to the public under a Creative Commons Attribution-NonCommercial-NoDerivatives 4.0 
// International license (CC BY-NC-ND 4.0, in English).
// for any questions, please email c.cohen@gmx.com



// ------------------------------Directories---------------------------------------
strdef root, lib, ses, out

root = getcwd()
sprint(lib, "%s%s", root, "lib/")
sprint(ses, "%s%s", root, "ses/")
sprint(out, "%s%s", root, "out/")
// --------------------------------------------------------------------------------



// --------------------------------------------------------------------------------
load_file("stdgui.hoc")
chdir(lib)
load_file("startlib.hoc")
// --------------------------------------------------------------------------------


axontype = getaxontype()
print_axontype()

changeaxontype()

print "Please restart the model"
